WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(RigPath)
-> GroupWorkflow ReadSchemas
    ExternalizedMapping(Path(DisplayName=RigPath))
    -> Bonsai.IO.ReadAllText(Path=..\examples\Rig.json)
    -> AsyncSubject RawRigSchema

    SubscribeSubject RawRigSchema
    -> AindVrForagingDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Rig.Rig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Normal
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Defer LoadDisplayCalibration
            WorkflowInput Source1
            -> AsyncSubject calibration

            SubscribeSubject calibration
            -> MemberSelector(Selector=Left)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #4
            SubscribeSubject calibration
            -> MemberSelector(Selector=Center)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #7
            SubscribeSubject calibration
            -> MemberSelector(Selector=Right)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #10
            #4, #7, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Left,
                Item2 as Center,
                Item3 as Right)
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject DisplayCalibration

        GroupWorkflow RenderLoop
            FloatProperty(Value=1)
            -> BehaviorSubject DisplayContrast

            FloatProperty(Value=1)
            -> BehaviorSubject DisplayBrightness

            Bonsai.Shaders.RenderFrame
            -> PublishSubject RenderFrame => #5
            ExternalizedMapping(Eye, NearClip, FarClip, Light) => #6
            #5, #6 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #7
            -> MemberSelector(Selector=ViewMatrix)
            -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #9
            #9, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as ViewMatrix,
                Item2.ProjectionMatrix as ProjectionMatrix,
                Item2.Light as Light)
            -> PublishSubject Draw3DStim
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Black, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #13
            SubscribeSubject DisplayCalibration
            -> MemberSelector(Selector=Right)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #16
            #13, #16 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #18
            SubscribeSubject DisplayContrast
            -> PropertyMapping(Contrast) => #20
            SubscribeSubject DisplayBrightness
            -> PropertyMapping(Brightness) => #22
            #18, #20, #22 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:DisplayColorAdjustments.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1) => #24
            SubscribeSubject DisplayCalibration
            -> MemberSelector(Selector=Center)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #27
            #13, #27 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #29
            SubscribeSubject DisplayContrast
            -> PropertyMapping(Contrast) => #31
            SubscribeSubject DisplayBrightness
            -> PropertyMapping(Brightness) => #33
            #29, #31, #33 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:DisplayColorAdjustments.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1) => #35
            SubscribeSubject DisplayCalibration
            -> MemberSelector(Selector=Left)
            -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #38
            #13, #38 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
            -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #40
            SubscribeSubject DisplayContrast
            -> PropertyMapping(Contrast) => #42
            SubscribeSubject DisplayBrightness
            -> PropertyMapping(Brightness) => #44
            #40, #42, #44 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:DisplayColorAdjustments.bonsai
              ExtentX=1
              ExtentY=1
              LocationX=0
              LocationY=0
              Layer=1
              Angle=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
              Contrast=1
              Brightness=0
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1) => #46
            #24, #35, #46 -> Zip
            -> PublishSubject PostDrawing

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadTextureBank.bonsai, Path=Textures, SearchPattern=*.jpg)
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COM13, StartExperimentSubjectName=StartExperiment) => #3
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #6
        #3, #6 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpTreadmill.bonsai, PortName=COM11, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindVrForagingDataSchema.Rig.SerializeToJson
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #18
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #22
        #18, #22 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

GroupWorkflow SessionSettings
    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #8
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #9
    #8, #9 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment

GroupWorkflow CorridorDrawing
    ExternalizedMapping(Value(DisplayName=CorridorLength))
    -> FloatProperty(Value=120)
    -> Take(Count=1)
    -> AsyncSubject VisualCorridorLength

    ExternalizedMapping(Value(DisplayName=CorridorWidth))
    -> FloatProperty(Value=40)
    -> Take(Count=1)
    -> AsyncSubject CorridorWidth

    ExternalizedMapping(Value(DisplayName=CorridorHeight))
    -> FloatProperty(Value=30)
    -> Take(Count=1)
    -> AsyncSubject CorridorHeight

    GroupWorkflow DefineTextures
        AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
        -> PropertyMapping(Size)
        -> AindVrForagingDataSchema.TaskLogic.Texture(Name=Floor)
        -> PropertyMapping(Floor) => #3
        AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
        -> PropertyMapping(Size)
        -> AindVrForagingDataSchema.TaskLogic.Texture(Name=Ceiling)
        -> PropertyMapping(Ceiling) => #7
        AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
        -> PropertyMapping(Size)
        -> AindVrForagingDataSchema.TaskLogic.Texture(Name=LeftWall)
        -> PropertyMapping(Left) => #11
        AindVrForagingDataSchema.TaskLogic.Size(Width=40, Height=40)
        -> PropertyMapping(Size)
        -> AindVrForagingDataSchema.TaskLogic.Texture(Name=RightWall)
        -> PropertyMapping(Right) => #15
        #3, #7, #11, #15 -> AindVrForagingDataSchema.TaskLogic.WallTextures
        -> WorkflowOutput
    -> Take(Count=1)
    -> AsyncSubject TextureDefinition

    Defer Initialize => #15
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> AsyncSubject InitPosition

        SubscribeSubject FarClipHorizon => #3
        SubscribeSubject InitPosition => #4
        #3, #4 -> Zip
        -> Subtract => #6
        SubscribeSubject VisualCorridorLength
        -> PropertyMapping(Value) => #8
        #6, #8 -> Divide(Operand=FloatProperty(Value=120))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Math.Ceiling(it)
        -> Take(Count=1)
        -> SelectMany Range
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Count

            SubscribeSubject InitPosition
            -> Take(Count=1)
            -> PropertyMapping(Start) => #5
            SubscribeSubject Count
            -> PropertyMapping(Count) => #7
            #5, #7 -> Range(Start=0, Count=9)
            -> WorkflowOutput
        -> InputMapping(Value(Selector=it))
        -> DoubleProperty(Value=8)
        -> WorkflowOutput
    GroupWorkflow Update => #16
        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #1
        SubscribeSubject MaxPosition => #2
        #1, #2 -> CombineLatest
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector="Item1.Z,Item2.Z")
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1.Z) => #5
        SubscribeSubject FarClipHorizon
        -> PropertyMapping(Value) => #7
        #5, #7 -> Add(Operand=FloatProperty(Value=1000)) => #8
        SubscribeSubject SigmaZ
        -> PropertyMapping(Value) => #10
        #8, #10 -> Add(Operand=FloatProperty(Value=0)) => #11
        SubscribeSubject VisualCorridorLength
        -> PropertyMapping(Value) => #13
        #11, #13 -> Divide(Operand=FloatProperty(Value=120))
        -> InputMapping(TypeMapping=TypeMapping<System.Double>)
        -> Bonsai.Numerics.Floor
        -> WorkflowOutput
    #15, #16 -> Concat
    -> DistinctUntilChanged => #18
    SubscribeSubject VisualCorridorLength
    -> PropertyMapping(Value) => #20
    #18, #20 -> Multiply(Operand=DoubleProperty(Value=120)) => #21
    #18, #21 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Id,
        Item2 as Start
        )
    -> InputMapping(StartPosition(Selector=Start), Id(Selector=Id)) => #24
    SubscribeSubject VisualCorridorLength
    -> PropertyMapping(Length) => #26
    SubscribeSubject CorridorWidth
    -> PropertyMapping(Width(Selector=it)) => #28
    SubscribeSubject CorridorHeight
    -> PropertyMapping(Height) => #30
    SubscribeSubject TextureDefinition
    -> PropertyMapping(Textures) => #32
    #24, #26, #28, #30, #32 -> IncludeWorkflow(Path=Extensions\CreateCorridorSpecs.bonsai, Height=0, Id=0, Length=120, StartPosition=0, Width=0)
    -> ReplaySubject VisualCorridorSpecs(BufferSize=nil)

    SubscribeSubject VisualCorridorSpecs
    -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
    -> Merge
    -> WorkflowOutput

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow PositionControl => #0
        GroupWorkflow InitialPosition => #0
            DoubleProperty(Value=0) => #0
            -> DoubleProperty(Value=0) => #1
            #0, #1 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EncoderSample
        -> MemberSelector(Selector="Value.Displacement,Seconds")
        -> Bonsai.Harp.CreateTimestamped => #3
        #0, #3 -> Concat => #4
        -> MemberSelector(Selector=Value) => #5
        SubscribeSubject Gain => #6
        #5, #6 -> WithLatestFrom
        -> Multiply
        -> Accumulate
        -> InputMapping(Z(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=2.56, Z=357.635132) => #11
        #4 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject CurrentPosition

        DoubleProperty(Value=1)
        -> Take(Count=1)
        -> BehaviorSubject Gain

        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #21
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #23
        #21, #23 -> Scan => #24
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #25
        #24, #25 -> BehaviorSubject MaxPosition
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> PublishSubject LickometerState
        -> Condition IsLickOnset
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> BehaviorSubject LickometerUntriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> BehaviorSubject LickometerTriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Take(Count=1)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerTriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerUntrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerUntriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow Treadmill
        FloatProperty(Value=0)
        -> Take(Count=1)
        -> BehaviorSubject TreadmillFriction

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.SensorDataDispatchRate)
        -> BehaviorSubject TreadmillSamplingRate

        GroupWorkflow DetermineTreadmillScaling
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration)
            -> MemberSelector(Selector=Output) => #2
            -> MemberSelector(Selector=WheelDiameter)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #4
              Expression: it * Math.Pi
            #2 -> MemberSelector(Selector=PulsesPerRevolution) => #5
            #4, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #7
              Expression: Item1 / Item2
            #2 -> MemberSelector(Selector=InvertDirection) => #8
            #7, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2 ? -1.0 * Item1 : Item1
            -> WorkflowOutput
        -> AsyncSubject TreadmillScaling

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedSensorData) => #9
        -> Skip(Count=1) => #10
        #10, #9 -> Zip => #11
        -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateDisplacement => #12
          Expression: single(Item1.Value.Encoder - Item2.Value.Encoder)
        SubscribeSubject TreadmillScaling
        -> PropertyMapping(RangeMax) => #14
        #12, #14 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #15
        #15, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateInstantSpeed => #17
          Expression:
            new(
            Item1 as Displacement,
            (Item1 / single(Item2.Item1.Seconds - Item2.Item2.Seconds)) as InstantVelocity
            )
        #11 -> MemberSelector(Selector=Item1.Seconds) => #18
        #17, #18 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderSample

        SubscribeSubject TreadmillFriction
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Clamp)
        -> DistinctUntilChanged => #24
        GroupWorkflow GetInterpolator
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration)
            -> MemberSelector(Selector=Output)
            -> MemberSelector(Selector=BrakeLookupCalibration)
            -> Merge => #4
            -> Index(Operand=IntProperty(Value=0)) => #5
            #4 -> Index(Operand=IntProperty(Value=1)) => #6
            #5, #6 -> Zip
            -> ToList
            -> Bonsai.Numerics.Interpolation.CreateLinear
            -> WorkflowOutput
        -> PropertyMapping(Interpolation) => #26
        #24, #26 -> Bonsai.Numerics.Interpolation.Interpolate
        -> AllenNeuralDynamics.Treadmill.Format(MessageType=Write, Register=AllenNeuralDynamics.Treadmill.BrakeCurrentSetPoint)
        -> CreateObservable SendMessage
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject HarpMessage

            SubscribeSubject HarpTreadmillEvents
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedTorque) => #4
            SubscribeSubject HarpMessage => #5
            ExternalizedMapping(DueTime(DisplayName=RetryTimeout))
            -> Bonsai.Shaders.Timer(DueTime=PT0.1S, Period=PT0.1S) => #7
            SubscribeSubject HarpMessage => #8
            #7, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #10
            #5, #10 -> Merge
            -> MulticastSubject HarpTreadmillCommands => #12
            #4, #12 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

GroupWorkflow WheelOfFortune
    SubscribeSubject PostDrawing
    -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=0, Right=3, Bottom=0, Top=1)
    -> PublishSubject DrawFlat

GroupWorkflow ControlUserInterface
    Bonsai.Gui.SliderBuilder Brake(Enabled=true, Visible=true, Minimum=0, Maximum=1, DecimalPlaces=nil, Value=0)
    -> Sink
        WorkflowInput Source1
        -> MulticastSubject TreadmillFriction
        -> WorkflowOutput
    -> VisualizerMapping => #2
    SubscribeSubject LickometerState
    -> MemberSelector(Selector=Item1)
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.RadioButtonBuilder(Enabled=true, Visible=true, Text=Licks, Checked=false)
    -> VisualizerMapping => #7
    #2, #7 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai)
